begin parameters
  uM_1_to_M_1 1e6
  
  orig_volume (0.8060089946*2) ^ 3
  new_volume (0.125*2)^3
  
  # we decreased the volume, we would like to make
  # the simulation run faster, 
  # bimol rates are adjusted thanks to volume decrease 
  unimol_mult orig_volume/new_volume
  
end parameters


begin seed species
  PrmA@Cube 1
  PrmR@Cube 1
end seed species

begin compartments
  Cube 3 1
end compartments  

begin reaction rules
  A + R -> AR 1204 * uM_1_to_M_1   
  PrmA -> PrmA + mRNA_A 50 * unimol_mult
  PrmA_bound -> PrmA_bound + mRNA_A 500 * unimol_mult  
  PrmR -> PrmR + mRNA_R 0.01 * unimol_mult
  PrmR_bound -> PrmR_bound + mRNA_R 50 * unimol_mult
  PrmA + A <-> PrmA_bound 602 * uM_1_to_M_1, 50 * unimol_mult
  PrmR + A <-> PrmR_bound 602 * uM_1_to_M_1, 100 * unimol_mult
  mRNA_A -> mRNA_A + A  50 * unimol_mult
  mRNA_R -> mRNA_R + R  5 * unimol_mult
  mRNA_A -> 0  10 * unimol_mult     
  mRNA_R -> 0  0.5 * unimol_mult
  A -> 0 1 * unimol_mult    
  R -> 0 0.2 * unimol_mult    
  AR -> R 1 * unimol_mult    
end reaction rules


begin observables
  Molecules A A
  Molecules R R
  Molecules AR AR
end observables  
